PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[.4,.4,.4]
  Experiment info = {u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data_Arrows_VVA_Color' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = Arrows_VVA_Color
  logging level = debug
  Screen = 1
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Routines
  Routine end
    TextComponent text
      color = black
      text = This portion of the experiment is over. Thank you.
      stopVal [duration (s)] = 3.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine color_practice
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Begin Experiment:
        import random

        vertexOptions = [3,4,5,6,999]
      Begin Routine:
        if trials_3.thisN == 0:
            lastTrialColor = thisTrial_3.answer
            lastnVertices = []

        if trials_3.thisN % 2 == 1:
            text_same_practice.setText("SAME / DIFFERENT?")
        else:
            text_same_practice.setText("")

        tempVerts = vertexOptions[:]

        try:
            tempVerts.remove(lastnVertices)
        except ValueError:
            pass

        nVertices = random.choice(tempVerts)



        poly = visual.Polygon(win=win,autoDraw = True,fillColor=thisTrial_3.color,edges=nVertices,units='height',size=[.5,.5])
      End Routine:
        if trials_3.thisN == 0:
            correct = 1
        elif lastTrialColor == thisTrial_3.answer and key_resp_11.keys in ['a']:
            correct = 1
        elif lastTrialColor != thisTrial_3.answer and key_resp_11.keys in ['f']:
            correct = 1
        else:
            correct = 0

        lastTrialColor = thisTrial_3.answer

        lastnVertices = nVertices
        if trials_3.thisN % 2 == 1:
            trials_3.addData('colorpractice_correct',correct)

        trials_3.addData('colorpractice_numVertices',nVertices)

        poly.setAutoDraw(False)
    TextComponent text_9
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent text_same_practice
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine color_instructions
    TextComponent text_4
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Your job is to determine whether two shapes are the SAME color, or DIFFERENT colors.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 's','a','d','f','g'
      startVal [time (s)] = 0.0
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  Routine color_trials
    KeyboardComponent color_response
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        between_format_text = visual.TextStim(win, color='black',text="Time for a short break.")
        colorOrder = expInfo['participant'] + 'color_order.csv'
      Begin Routine:
        if trials_2.thisN == 0:
            lastTrialColor = thisTrial_2.answer
            lastnVertices = []

        if trials_2.thisN % 2 == 1:
            text_same.setText("SAME / DIFFERENT?")
        else:
            text_same.setText("")

        tempVerts = vertexOptions[:]

        try:
            tempVerts.remove(lastnVertices)
        except ValueError:
            pass

        nVertices = random.choice(tempVerts)


        poly = visual.Polygon(win=win,autoDraw = True,fillColor=thisTrial_2.color,edges=nVertices,units='height',size=[.5,.5])
      End Routine:
        if trials_2 > 0 and (trials_2.thisN +1) % 20 == 0:
            poly.setAutoDraw(False)
            win.flip()
            between_format_text.size = 0.8
            between_format_text.draw()
            win.flip()
            event.clearEvents()
            event.waitKeys(keyList=['d'])

        if trials_2.thisN == 0:
            correct = 1
        elif lastTrialColor == thisTrial_2.answer and color_response.keys in ['a']:
            correct = 1
        elif lastTrialColor != thisTrial_2.answer and color_response.keys in ['f']:
            correct = 1
        else:
            correct = 0

        lastTrialColor = thisTrial_2.answer

        lastnVertices = nVertices

        if trials_2.thisN % 2 == 1:
            trials_2.addData('colorpractice_correct',correct)

        trials_2.addData('colorpractice_numVertices',nVertices)

        poly.setAutoDraw(False)
    TextComponent text_same
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine color_instructions_3
    TextComponent text_10
      wrapWidth = 1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great! Now for the actual experiment. You have as long as you like - try to get as many correct as you can.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 's','d','g'
      startVal [time (s)] = 0.0
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  Routine color_practice_instructions
    TextComponent text_6
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 's','d','g'
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Begin Experiment:
        import random

        colorOrder = expInfo['participant'] + 'color_order.csv'
      Begin Routine:
        if repeat_color_practice.thisN == 0:
            text_6.setText("Let's try a few for practice. You'll see pairs of shapes, with one shape on the screen at a time. Each shape will be BLUE or RED or ORANGE. Tell me if the two shapes are the SAME color, or DIFFERENT colors. For the first shape, just say 'GO.' Then, when it says 'Same/Different?' underneath, tell me whether you see the same color or a different color as the first shape.")
        else:
            text_6.setText("Ok, before we practice one more time - do you have any questions about the task?")
  Routine color_sample_diff
    PolygonComponent polygon_4
      fillColor = #fdae61
      pos = (.3, -.2)
      units = height
      startVal [time (s)] = 0.0
      nVertices = 5
      size = (0.5, 0.5)
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    PolygonComponent polygon_5
      fillColor = #2c7bb6
      pos = (-.3, -.2)
      units = height
      startVal [time (s)] = 0.0
      nVertices = 5
      size = (0.5, 0.5)
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    TextComponent text_5
      wrapWidth = 1
      color = black
      pos = (0, .6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        These shapes are DIFFERENT colors. If you saw the shape on the left followed by the shape on the right, you would say

                "DIFFERENT"
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 's','a','d','f','g'
      startVal [time (s)] = 0.0
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  Routine color_sample_same
    PolygonComponent polygon_2
      fillColor = #d7191c
      pos = (-.3, -.2)
      units = height
      startVal [time (s)] = 0
      nVertices = 999
      size = (0.5, .5)
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    PolygonComponent polygon_3
      fillColor = #d7191c
      pos = (.3, -.2)
      units = height
      startVal [time (s)] = 0.0
      nVertices = 3
      size = (0.5, 0.5)
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    TextComponent text_3
      wrapWidth = 1
      color = black
      pos = (0, .6)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        These shapes are the SAME color. If you saw the shape on the left followed by the shape on the right, you would say

                "SAME"
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 's','a','d','f','g'
      startVal [time (s)] = 0.0
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  Routine ISI_2
    TextComponent fixation_2
      color = black
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
      Begin Routine:
        if trials_2.thisN % 2 == 0:
            continueRoutine = False
  Routine ISI
    TextComponent fixation
      color = black
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = .1
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    CodeComponent code_2
      Begin Routine:
        if trials_3.thisN % 2 == 0:
            continueRoutine = False
  Routine color_practice_between_format
    TextComponent text_2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Experiment:
        colorCounterBal = ['1','2']
        random.shuffle(colorCounterBal)

        colorPracticeOrders = ['1','2','3']
        random.shuffle(colorPracticeOrders)

        colorPracticeStem = 'color_practice_'
        colorPracticeTail = '.csv'
      Begin Routine:
        colorPracticeOrder = colorPracticeStem + colorPracticeOrders[repeat_color_practice_mini.thisN] + '_' + colorCounterBal[repeat_color_practice.thisN] + colorPracticeTail



        if repeat_color_practice_mini.thisN == 0:
            continueRoutine = False
        else:
            text_2.setText('Time for a short break.')
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'd'
      startVal [time (s)] = 0.0
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Flow
  Routine color_instructions
  Routine color_sample_same
  Routine color_sample_diff
  LoopInitiator repeat_color_practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine color_practice_instructions
    LoopInitiator repeat_color_practice_mini loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 3
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      Routine color_practice_between_format
      LoopInitiator trials_3 loopType="TrialHandler"
        conditionsFile = $"Sequences//"+ colorPracticeOrder
        loopType = sequential
        nReps = 1
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        Routine color_practice
        Routine ISI
      LoopTerminator trials_3
    LoopTerminator repeat_color_practice_mini
  LoopTerminator repeat_color_practice
  Routine color_instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $"Sequences//"+ colorOrder
    loopType = sequential
    nReps = 1
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    Routine color_trials
    Routine ISI_2
  LoopTerminator trials_2
  Routine end
