PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[.4,.4,.4]
  Experiment info = {u'participant': u'', u'Scr or Whi': u'Whi'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data_Arrows_VVA_Direction' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = Arrows_VVA_Direction
  logging level = debug
  Screen = 1
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Routines
  Routine spatial_practice_between_formats
    TextComponent text_2
      color = black
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Routine:
        practice_format_conditions = practice_formats.pop(0)
        practice_trials = 'practice_order_' + practice_images + '_' + practice_format_conditions + '.xlsx'
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text
      color = black
      text = This portion of the experiment is over. Thank you.
      stopVal [duration (s)] = 3.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine spatial_sample_same
    PolygonComponent polygon_2
      fillColor = #d7191c
      pos = (-.3, 0)
      startVal [time (s)] = 0
      nVertices = 999
      size = (0.5, .5)
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    PolygonComponent polygon_3
      fillColor = #d7191c
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      nVertices = 3
      size = (0.5, 0.5)
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    TextComponent text_3
      wrapWidth = 1
      color = black
      pos = (0, .6)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        These spatial directions are the SAME. So if you saw the spatial direction on the left followed by the spatial direction on the right, you would say

        "SAME"
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine spatial_instructions
    TextComponent text_4
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This task is just like the previous one, except with spatial directions instead of colors. Your job is to determine whether the spatial direction that is currently on the screen is the SAME spatial direction as the one that you just saw or a DIFFERENT spatial direction.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        if expInfo['Scr or Whi'] == 'Scr':
            practice_images = "SCR"
            stimOrder = expInfo['participant'] + '_vva_within_scr_order.csv'
        elif expInfo['Scr or Whi'] == 'Whi':
            practice_images = "WHI"
            stimOrder = expInfo['participant'] + '_vva_within_whi_order.csv'
  Routine spatial_practice_instructions
    TextComponent text_6
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Begin Experiment:
        import random
      Begin Routine:
        practice_formats = ['image','schema','word']

        random.shuffle(practice_formats)

        practice_format_conditions = practice_formats.pop(0)
        practice_trials = 'practice_order_' + practice_images + '_' + practice_format_conditions + '.xlsx'

        if repeat_spatial_practice.thisN == 0:
            text_6.setText("Let's try a few for practice. You'll see spatial directions one at a time on the screen. They will be either LEFT or RIGHT or AHEAD. Tell the experimenter if the spatial direction on the screen is the SAME or DIFFERENT from the spatial direction that you just saw.")
        elif repeat_spatial_practice.thisN == 1:
            text_6.setText("Ok, before we practice one more time - do you have any questions about the task?")
  Routine spatial_trials
    KeyboardComponent color_response
      forceEndRoutine = True
      allowedKeys = 'j','f'
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      startVal [time (s)] = 0.0
      image [set every repeat] = $"21_Stimuli//" + Stimulus
      size = [1600/win.size[0],1600/win.size[1]]
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    CodeComponent code_3
      Begin Experiment:
        between_format_text = visual.TextStim(win, color='black',text="+")
      End Routine:
        if trials_2 > 0 and (trials_2.thisN +1) % 21 == 0:
            between_format_text.draw()
            win.flip()
            event.clearEvents()
            event.waitKeys(keyList=['space'])
  Routine spatial_practice
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'j','f'
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [1600/win.size[0],1600/win.size[1]]
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  Routine spatial_instructions_3
    TextComponent text_10
      wrapWidth = 1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great! Now for the actual experiment. You have as long as you like - try to get as many correct as you can.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine spatial_sample_diff
    PolygonComponent polygon_4
      fillColor = #fdae61
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      nVertices = 5
      size = (0.5, 0.5)
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    PolygonComponent polygon_5
      fillColor = #2c7bb6
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      nVertices = 5
      size = (0.5, 0.5)
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    TextComponent text_5
      wrapWidth = 1
      color = black
      pos = (0, .6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        These spatial directions are DIFFERENT. So if you saw the spatial direction on the left followed by the spatial direction on the right, you would say

        "DIFFERENT"
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine spatial_instructions
  LoopInitiator repeat_spatial_practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine spatial_practice_instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = random
      nReps = 1
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      Routine spatial_practice
    LoopTerminator trials
    Routine spatial_practice_between_formats
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = random
      nReps = 1
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      Routine spatial_practice
    LoopTerminator trials_3
    Routine spatial_practice_between_formats
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = random
      nReps = 1
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      Routine spatial_practice
    LoopTerminator trials_4
  LoopTerminator repeat_spatial_practice
  Routine spatial_instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $"Sequences//"+ stimOrder
    loopType = sequential
    nReps = 1
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    Routine spatial_trials
  LoopTerminator trials_2
  Routine end
